CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Row>\d{3})(?P<Column>\d{3})-\d-(?:\d{3})(?:\d{3})(?P<Channel>00[1-3])\.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "001")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "002")
    Name to assign these images:PU1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "003")
    Name to assign these images:IBA1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Membrane
    Select the method to identify the secondary objects:Propagation
    Select the input image:IBA1
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:PU1
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:IBA1
    Select objects to measure:Membrane

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\Columbus\\Ishan[1351]\\14-07-2025_GGIA_Landing Pad-2.5[2472]\\2025-07-14T185501+0100[2522]\\2025-07-14T185501+0100[2522]
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Membrane|Intensity_MeanIntensity_IBA1,Membrane|Parent_Nuclei,Membrane|Number_Object_Number,Nuclei|Intensity_MeanIntensity_PU1,Nuclei|Number_Object_Number,Nuclei|Children_Membrane_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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